# 1 "/opt/topspin3.6.2/exp/stan/nmr/lists/pp/user/2D_1H_15N_SOFAST_HMQC"
; 20220603 - 2D 1H-15N SOFAST HMQC, using automatic shape pulse setup
;sfhmqcf3gpph_autosetB.go      Was: sfhmqcf3gpph_autoset.go
; TEMPORARILY REPLACED 13C 180 shaped pulse by hard 180 08Nov2017
;
; Now adding in Brutscher-style automatic shape pulse setup
;avance-version (13/02/28)
;SOFAST HMQC
;2D H-1/X correlation via heteronuclear zero and double quantum
;   coherence
;phase sensitive
;with decoupling during acquisition
;
;P.Schanda and B. Brutscher, J. Am. Chem. Soc. 127, 8014 (2005)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=

; optional composite pulse decoupling on the 13C channel . For F1 13C decoupling set ZGOPTNS to -DLABEL_CN

prosol relations=<triple>
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

"d11=30m"
"d12=20u"
"d21=1s/(cnst4*2)"
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"in0=inf1"
"d0=in0/2-p21*4/3.1415"

; ==== Now adding in automatic shape pulse setup ====
;
; Note that the shape calibration values used here are specific to the pulses used (PC9 and Reburp), see below. 
; Makes no difference which PC9 file is used (PC9_4_90.1000 or PC9_4_120.1000), as the two shapes are identical
; 
; CNST2 is BW in PPM for PC9
; CNST22 is BW in PPM for Reburp 
; CNST3 is PC9 flip angle in degrees.
; CNST19 is 1H target offset in PPM. 
; CNST39 is compensation factor for evolution during PC9 excitation pulse
; CNST40 is an adjusted compensation factor for evolution during final J-delay
;   Standard value for both is 0.529. Brutscher uses CNST39 = 0.55 during initial 1/2J then 0.52 during last 1/2J.) . 

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; Calculations use params extracted from corresponding shape files:
; PC9_4_120.1000 file:
; ##$SHAPE_TOTROT= 1.200000E02
; ##$SHAPE_TYPE= Excitation
; ##$SHAPE_BWFAC= 7.512000E00              (SHAPE_BWFAC is analogous to Varian "pwbw".)
; ##$SHAPE_INTEGFAC= 1.250034E-01

; Reburp.1000 file:
; ##$SHAPE_EXMODE= Refocussing
; ##$SHAPE_TOTROT= 1.800000E02
; ##$SHAPE_TYPE= Refocussing
; ##$SHAPE_BWFAC= 5.814000E00
; ##$SHAPE_INTEGFAC= 7.981016E-02

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; ==== Calc for PC9 ==== 
; Brutscher uses adjusted "BW_FAC": 
"p50=7.2/(cnst2*bf1/1000000)" ; Note use of adjusted "BW_FAC" here, 7.2 instead of 7.512
;STANDARD VERSION: "p50=7.512/(cnst2*bf1/1000000)"                             ; Standard PC9 "BW_FAC" is 7.512
"spw50=plw1*(pow((cnst3/90.0)*(p1/p50)/0.125,2))"           ; PC9 "INTEG_FAC" is 0.1250034
"spoff50=bf1*(cnst19/1000000)-o1"                           ; PC9 offset. n.b. Need to use "spoff" not "spoffs" in these calcs!
;"spoal50=0.5"
;"spnam50=Pc9_4_120.1000"

; ==== Calc for ReBurp ==== 
; Brutscher again uses an adjusted "BW_FAC": 
"p51=4.875/(cnst22*bf1/1000000)" ; Note use of adjusted "BW_FAC" here, 4.875 instead of 5.814
;STANDARD VERSION: "p51=5.814/(cnst2*bf1/1000000)"                             ; Standard PC9 "BW_FAC" is 5.814
"spw51=plw1*(pow((p1*2/p51)/0.0798,2))"                     ; ReBurp "INTEG_FAC" is 0.0798
"spoff51=bf1*(cnst19/1000000)-o1"                           ; ReBurp offset. (Same as used for PC9.)
;"spoal51=0.5"
;"spnam51=Reburp.1000"

"DELTA1=d21-p16-d16-p50*cnst39" ; Set cnst39=0.529 (or Brutscher's 0.55)
"DELTA2=p50*cnst40-de-4u"       ; Set cnst40=0.529 (or Brutscher's 0.52)
; Original used cnst39 for both DELTAs:   "DELTA2=p50*cnst39-de-4u"
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; DELETE "spoff23=bf1*(cnst19/1000000)-o1"
; DELETE "spoff24=bf1*(cnst19/1000000)-o1"


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; dimension 2D; AQ_mode  (F1) States-TPPI
define delay MCWRK
define delay MCREST
define delay d0orig
"d0orig=d0"
define loopcounter t1loop
"t1loop=0"
define loopcounter ph1loop
"ph1loop=0"
define loopcounter ST1CNT
"ST1CNT = trunc(td1 / 2)"
"MCREST = d1 - d1"
"MCWRK = 0.200000*d1"

    dccorr
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1 ze 
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LBLAV, MCWRK
      "d0=d0orig + t1loop * in0 "
      "phval3 = (ph1loop % 4) * 90"
      MCWRK ip3 + phval3
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  d11 pl26:f3
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2 MCWRK  * 2 do:f3
LBLF1, MCWRK  * 2
LBLST1, MCWRK 
  MCREST
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3 d12 pl3:f3
  50u setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
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  p16:gp2
  d16

  (p50:sp50 ph1):f1
  p16:gp1
  d16

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  (center (p51:sp51 ph2):f1 (DELTA1 p21 ph3 d0 p21 ph4 DELTA1):f3 )


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  DELTA2
  p16:gp1
  d16

	2u pl26:f3

  4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
  go=2 ph31 cpd3:f3 
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  MCWRK  do:f3 wr #0 if #0 zd 

  "ph1loop+=1"
      "d0=d0orig + t1loop * in0 "
      "phval3 = (ph1loop % 4) * 90"
      MCWRK ip3 + phval3
  lo to LBLF1 times 2
  MCWRK 

  "t1loop+=1"
      "d0=d0orig + t1loop * in0 "
      "phval3 = (ph1loop % 4) * 90"
      MCWRK ip3 + phval3
  lo to LBLST1 times ST1CNT
  MCWRK 
  "t1loop=0"
  "ph1loop=0"
  MCWRK rf #0
  lo to LBLAV times tdav
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exit 
  
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ph1=0 
ph2=0 
ph3=0 2
ph4=0 0 2 2 
ph31=0 2 2 0


; ==== NEED TO UPDATE THE FOLLOWING DESCRIPTIONS.... ====
;pl3 : f3 channel - power level for pulse (default)
;pl26: f3 channel - power level for CPD/BB decoupling (low power)
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;sp23: f1 channel - shaped pulse 120 degree 
;                   (Pc9_4_120.1000)
;sp24: f1 channel - shaped pulse 180 degree (Rsnob.1000)
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p16: homospoil/gradient pulse                       [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p39: f1 channel - 120 degree shaped pulse for excitation
;                      Pc9_4_120.1000 (120o)    (3.0ms at 600.13 MHz)
;p40: f1 channel - 180 degree shaped pulse for refocussing
;                      Rsnob.1000               (1.0ms at 600.13 MHz)
;d0 : incremented delay (2D) = in0/2-p21*4/3.1415
;d1 : relaxation delay
;d11: delay for disk I/O                             [30 msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;d21 : 1/(2J)NH
;cnst2: Shape pulse BW in PPM. 
;cnst3: PC9 flip angle in degrees.
;cnst22: Reburp Shape pulse BW in PPM.
;cnst4: J(NH)
;cnst19: H(N) chemical shift (offset, in ppm)
;cnst39: compensation of chemical shift evolution during p50 (PC9 pulse)
;           Pc9_4_120.1000: 0.529
;cnst40: compensation of chemical shift evolution during p51 (Reburp pulse)
;           Reburp.1000: 0.529
; Standard value is 0.529. Brutscher uses CNST39 = 0.55 during initial 1/2J then 0.52 during last 1/2J.) . 
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;spnam50: [Use Pc9_4_120.1000 or 90 deg version]
;spnam50: {Use Reburp.1000]
;spoal50: [Use 0.5]
;spoal51: [Use 0.5]

;inf1: 1/SW(N) = 2 * DW(N)
;in0: 1/ SW(N) = 2 * DW(N)
;nd0: 1
;ns: 2 * n
;ds: 16
;aq: <= 50 msec
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEC
;cpd3: decoupling according to sequence defined by cpdprg3: garp4.p62
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence
;          use pulse of >= 350 usec

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;use gradient ratio:	gp 1 : gp 2
;			  11 :    7


;for z-only gradients:
;gpz1: 11%
;gpz2:  7%
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;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end
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;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1

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;$Id: sfhmqcf3gpph,v 1.10.6.2 2013/03/08 15:13:06 ber Exp $
