# 1 "/opt/topspin3.6.2/exp/stan/nmr/lists/pp/user/2D-1H-1H-NOESY"
;noesyesgpph
;avance-version (10/02/12)
;2D homonuclear correlation via dipolar coupling
;dipolar coupling may be due to noe or chemical exchange.
;phase sensitive
;water suppression using excitation sculpting with gradients
;
;T.-L. Hwang & A.J. Shaka, J. Magn. Reson.,
;   Series A 112 275-279 (1995)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=
;
;Decoupling added on 13C/15N

prosol relations=<triple>

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"p2=p1*2"
"d11=30m"
"d12=20u"


"in0=inf1"
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"d0=in0/2-p1*4/3.1416"


"TAU=de+p1*2/3.1416+54u"
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"acqt0=0"
baseopt_echo


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; dimension 2D; AQ_mode  (F1) States-TPPI
define delay MCWRK
define delay MCREST
define delay d0orig
"d0orig=d0"
define loopcounter t1loop
"t1loop=0"
define loopcounter ph1loop
"ph1loop=0"
define loopcounter ST1CNT
"ST1CNT = trunc(td1 / 2)"
"MCREST = d1 - d1"
"MCWRK = 0.200000*d1"

    dccorr
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1 ze
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LBLAV, MCWRK
      "d0=d0orig + t1loop * in0 "
      "phval1 = (ph1loop % 4) * 90"
      MCWRK ip1 + phval1
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2 MCWRK  * 2 do:f2  do:f3
LBLF1, MCWRK  * 2
LBLST1, MCWRK 
  MCREST
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3 d12 pl1:f1 pl12:f2 pl16:f3
  p1 ph1
  d0 cpd2:f2 cpd3:f3
  p1 ph2             
  d8 do:f2 do:f3
  p1 ph3
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  50u setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
  p16:gp1
  d16 pl0:f1
  (p12:sp1 ph4:r):f1
  4u
  d12 pl1:f1

  p2 ph5

  4u
  p16:gp1
  d16
  TAU
  p16:gp2
  d16 pl0:f1
  (p12:sp1 ph6:r):f1
  4u
  d12 pl1:f1
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  p2 ph7

  4u
  p16:gp2
  d16
  4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7

  go=2 ph31 cpd2:f2 cpd3:f3
  3m do:f2 do:f3
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  MCWRK  wr #0 if #0 zd 

  "ph1loop+=1"
      "d0=d0orig + t1loop * in0 "
      "phval1 = (ph1loop % 4) * 90"
      MCWRK ip1 + phval1
  lo to LBLF1 times 2
  MCWRK 

  "t1loop+=1"
      "d0=d0orig + t1loop * in0 "
      "phval1 = (ph1loop % 4) * 90"
      MCWRK ip1 + phval1
  lo to LBLST1 times ST1CNT
  MCWRK 
  "t1loop=0"
  "ph1loop=0"
  MCWRK rf #0
  lo to LBLAV times tdav
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exit
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ph1= 0 0 2 2 
ph2= 0
ph3= 0 0 0 0 2 2 2 2 1 1 1 1 3 3 3 3
ph4= 0 0 0 0 1 1 1 1
ph5= 2 2 2 2 3 3 3 3
ph6= 2 3
ph7= 0 1
ph31=0 2 2 0 0 2 2 0 1 3 3 1 1 3 3 1


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;sp1 : f1 channel - shaped pulse 180 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p12: f1 channel - 180 degree shaped pulse (Squa100.1000)   [2 msec]
;pl12 : f2 decoupling power
;pl16 : f3 decoupling power
;p16: homospoil/gradient pulse
;d0 : incremented delay (2D)
;d1 : relaxation delay; 1-5 * T1
;d8 : mixing time
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;inf1: 1/SW = 2 * DW
;in0: 1/(1 * SW) = 2 * DW
;nd0: 1
;NS: 8 * n
;DS: 16
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
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;use gradient ratio:    gp 1 : gp 2
;                         31 :   11

;for z-only gradients:
;gpz1: 31%
;gpz2: 11%

;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
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;Processing

;PHC0(F1): 90
;PHC1(F1): -180
;FCOR(F1): 1

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;$Id: noesyesgpph,v 1.11 2010/02/12 15:03:55 ber Exp $
